{
    "actions": {
        "acqdatetime": {
            "filters": {}, 
            "params": {}
        }, 
        "header_series": {
            "filters": {}, 
            "params": {
                "auto_suffix": false
            }
        }, 
        "ocr_series": {
            "filters": {}, 
            "params": {
                "auto_suffix": false, 
                "ocr_border": 0, 
                "ocr_regions": {
                    "OCR_DynRange": {
                        "prefix": "C", 
                        "type": "float", 
                        "xywh": "4;219;75;19"
                    }, 
                    "OCR_Gain": {
                        "prefix": "Gn", 
                        "type": "float", 
                        "xywh": "4;200;75;19"
                    }, 
                    "OCR_MechIndex": {
                        "prefix": "MI", 
                        "type": "float", 
                        "xywh": "565;4;94;26"
                    }, 
                    "OCR_TissueIndex": {
                        "prefix": "TIS", 
                        "type": "float", 
                        "xywh": "565;30;94;26"
                    }
                }, 
                "ocr_threshold": 0, 
                "ocr_zoom": 10
            }
        }, 
        "qc_series": {
            "filters": {}, 
            "params": {
                "auto_suffix": false, 
                "cluster_fminsize": 300.0, 
                "cluster_mode": "all_middle", 
                "fitcircle_frac": 0.3333333333333333, 
                "hor_offset": 3, 
                "sen_delta": 0.1, 
                "sen_filter": 5, 
                "signal_thresh": 0, 
                "uni_delta": 0.05, 
                "uni_depth": 5, 
                "uni_filter": 5, 
                "uni_range_model": "skip10pct", 
                "uni_start": 2, 
                "ver_offset": 2
            }
        }
    }, 
    "cfgformat": "20180910", 
    "comments": {
        "author": "Arnold Schilham, UMCU", 
        "creator": "generate_config_json.py version 20180912", 
        "description": "US/AirReverberations for Philips CX50", 
        "usage": [
            "  \"OCR_xxx\": \"xywh\": \"10;30;50;25\" # x;y;width;height of bounding box of OCR_xxx", 
            "  \"OCR_xxx\": \"prefix\": \"TI\" # text in bounding box of OCR_xxx starts with this and this should be stripped", 
            "  \"OCR_xxx\": \"suffix\": \"mm\" # text in bounding box of OCR_xxx ends with this and this should be stripped", 
            "  \"OCR_xxx\": \"type\": \"float\" # after stripping prefix and suffix, text should be converted to this data type", 
            "\n", 
            "  If \"OCR_probeID\" is specified, OCR will be used to find an identifier for values, info from the dicom headers is used", 
            "\n"
        ], 
        "version": "20170503"
    }, 
    "info": {
        "acqdatetime": {
            "params": {}
        }, 
        "header_series": {
            "params": {
                "auto_suffix": "add a probename as suffix to all results (True)"
            }
        }, 
        "ocr_series": {
            "params": {
                "auto_suffix": "add a probename as suffix to all results (True)", 
                "ocr_border": "add extra border around text in ROI before ocr analysis (10)", 
                "ocr_regions": {
                    "OCR_DynRange": {
                        "prefix": "text in bounding box of OCR_DynRange starts with this", 
                        "type": "contents minus prefix of bounding box of OCR_DynRange should be of this type", 
                        "xywh": "x0;y0;width;height of bounding box of OCR_DynRange"
                    }, 
                    "OCR_Gain": {
                        "prefix": "text in bounding box of OCR_Gain starts with this", 
                        "type": "contents minus prefix of bounding box of OCR_Gain should be of this type", 
                        "xywh": "x0;y0;width;height of bounding box of OCR_Gain"
                    }, 
                    "OCR_MechIndex": {
                        "prefix": "text in bounding box of OCR_MechIndex starts with this", 
                        "type": "contents minus prefix of bounding box of OCR_MechIndex should be of this type", 
                        "xywh": "x0;y0;width;height of bounding box of OCR_MechIndex"
                    }, 
                    "OCR_TissueIndex": {
                        "prefix": "text in bounding box of OCR_TissueIndex starts with this", 
                        "type": "contents minus prefix of bounding box of OCR_TissueIndex should be of this type", 
                        "xywh": "x0;y0;width;height of bounding box of OCR_TissueIndex"
                    }
                }, 
                "ocr_threshold": "threshold on pixel values to remove background gradient (0)", 
                "ocr_zoom": "zoom factor before ocr analysis (10)"
            }
        }, 
        "qc_series": {
            "params": {
                "auto_suffix": "add a probename as suffix to all results (True)", 
                "cluster_fminsize": "ignore clusters smaller than imwidth*imheight/fminsize", 
                "cluster_mode": "mode of connected components analysis; either all_middle (def) or largest_only", 
                "fitcircle_frac": "use only this central fraction for circle fitting", 
                "hor_offset": "default lines to exclude from left and right when making profiles (10)", 
                "sen_delta": "a peak in sensitivity profile must be at least <fdelta>*(max-noise)", 
                "sen_filter": "running average of this width for sensitivity data", 
                "signal_thresh": "threshold on pixelvalues for reverberation patterns; use>0 for noisy data (0)", 
                "uni_delta": "a dip in normalized reverb pattern must be at least <delta>", 
                "uni_depth": "depth in mm of size of ROI for reverb pattern analysis from top of profile. (5)", 
                "uni_filter": "running average of this width before peak detection", 
                "uni_range_model": "method to determine y-range for uniformity profile. absolute/skip10pct/skip20pct/maxsenslimit (absolute)", 
                "uni_start": "offset in mm to start of ROI for reverb pattern analysis from top of profile. (2)", 
                "ver_offset": "default lines to exclude from top and bottom when making profiles (10)"
            }
        }
    }
}